PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'hndns': '', 'eye': '', 'sex': '', 'age': '', 'edu': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent hello
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        سلام :)
        در این تسک چندین تصویر به شما نشان داده می شود
        برای هر تصویر از شما خواسته می شود که جنسیت فرد
        مشاهده شده را با فشردن کلید های مشخص اعلام کنید.
  Routine fix_R3
    PolygonComponent polygon_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Test_R3
    ImageComponent image_6
      image [set every repeat] = $stim
      pos [set every repeat] = (r*1.45*cos((pos-2)%6*(pi/3)),r*1.45*sin((pos-2)%6*(pi/3)))
      size [set every repeat] = (size*1.45,size*1.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_r3
      allowedKeys = 'p','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_R3_2
  Routine Ins_R2
    ImageComponent image_5
      image = KbRight.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_r2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_L2
    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Test_L2
    ImageComponent image_4
      image [set every repeat] = $stim
      pos [set every repeat] = (r*1.45*cos((pos-2)%6*(pi/3)),r*1.45*sin((pos-2)%6*(pi/3)))
      size [set every repeat] = (size*1.45,size*1.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_r2
      allowedKeys = 'q','w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_L3
    ImageComponent image_7
      image = KbLeft.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_l3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_L3_2
  Routine fix_L3
    PolygonComponent polygon_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Test_L3
    ImageComponent image_8
      image [set every repeat] = $stim
      pos [set every repeat] = (r*1.45*cos((pos-2)%6*(pi/3)),r*1.45*sin((pos-2)%6*(pi/3)))
      size [set every repeat] = (size*1.45,size*1.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_l3
      allowedKeys = 'q','w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_R3
    ImageComponent image_9
      image = KbRight.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_r3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_R3_2
  Routine Test_R
    ImageComponent image
      image [set every repeat] = $stim
      pos [set every repeat] = (r*1.45*cos((pos-2)%6*(pi/3)),r*1.45*sin((pos-2)%6*(pi/3)))
      size [set every repeat] = (size*1.45,size*1.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_r
      allowedKeys = 'p','o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_L
    ImageComponent ins_l
      image = KbLeft.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_l
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_L
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  Routine Test_L
    ImageComponent image_2
      image [set every repeat] = $stim
      pos [set every repeat] = (r*4/2.8*cos((pos-2)%6*(pi/3)),r*4/2.8*sin((pos-2)%6*(pi/3)))
      size [set every repeat] = (size*4/2.8,size*4/2.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_l
      allowedKeys = 'q','w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_L_3
    ImageComponent image_3
      image = KbLeft.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_l2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins_R
    ImageComponent ins_r
      image = KbRight.jpg
      size = (1, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ins_r
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_R
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05,0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine round1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine round2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 2
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  Routine round3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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  Routine round4
Flow
  Routine trial
  Routine round1
  Routine Ins_R
  LoopInitiator R1 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'stim': '0.bmp', 'pos': 1, 'r': 0, 'size': 2.49},
      {'stim': '0.bmp', 'pos': 2, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 3, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 4, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 5, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 6, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 7, 'r': 3.98, 'size': 3.98},
      {'stim': '0.bmp', 'pos': 8, 'r': 6.99, 'size': 5.99},
      {'stim': '0.bmp', 'pos': 9, 'r': 6.99, 'size': 5.99},
      {'stim': '0.bmp', 'pos': 10, 'r': 6.99, 'size': 5.99},
      {'stim': '0.bmp', 'pos': 11, 'r': 6.99, 'size': 5.99},
      {'stim': '0.bmp', 'pos': 12, 'r': 6.99, 'size': 5.99},
      {'stim': '0.bmp', 'pos': 13, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 1, 'r': 0, 'size': 2.49},
      {'stim': '10.bmp', 'pos': 2, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 3, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 4, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 5, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 6, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 7, 'r': 3.98, 'size': 3.98},
      {'stim': '10.bmp', 'pos': 8, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 9, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 10, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 11, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 12, 'r': 6.99, 'size': 5.99},
      {'stim': '10.bmp', 'pos': 13, 'r': 6.99, 'size': 5.99},
      {'stim': '20.bmp', 'pos': 1, 'r': 0, 'size': 2.49},
      {'stim': '20.bmp', 'pos': 2, 'r': 3.98, 'size': 3.98}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
    Routine fix_R
    Routine Test_R
  LoopTerminator R1
  Routine Ins_L
  LoopInitiator L1 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_L
    Routine Test_L
  LoopTerminator L1
  Routine round2
  Routine Ins_L
  LoopInitiator L2 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_L
    Routine Test_L
  LoopTerminator L2
  Routine Ins_R
  LoopInitiator R2 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_R
    Routine Test_R
  LoopTerminator R2
  Routine round3
  Routine Ins_L
  LoopInitiator L3 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_L
    Routine Test_L
  LoopTerminator L3
  Routine Ins_R
  LoopInitiator R3 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_R
    Routine Test_R
  LoopTerminator R3
  Routine round4
  Routine Ins_R
  LoopInitiator R4 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_R
    Routine Test_R
  LoopTerminator R4
  Routine Ins_L
  LoopInitiator L4 loopType="TrialHandler"
    conditionsFile = info.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
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    Routine fix_L
    Routine Test_L
  LoopTerminator L4
